PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -0.4510, 0.0196, 0.4118
  expName = First Attempt at Part 2 Expt Script
  keyboardBackend = ioHub
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Routines
  Routine trial
    SoundComponent stimuli3streams
      sound = $stimuliOddballs
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 30.0
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    SoundComponent stimuli3streamsoddballs
      sound = $stimuli
      startVal [time (s)] = 34.0
      stopVal [duration (s)] = 30.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 64.0
      stopVal [duration (s)] = 5.0
      text = How many oddballs did you hear?
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 64.0
      stopVal [duration (s)] = 5.0
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    ImageComponent arrow
      image = $arrowImages
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent feedbackIncorrect
      size = (0.5, 0.5)
      startVal [condition] = $correctAnswer==True
      stopVal [duration (s)] = 2.0
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    ImageComponent feedbackCorrect
      size = (0.5, 0.5)
      startVal [time (s)] = $correctAnswer==False
      stopVal [duration (s)] = 2.0
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  Routine break_2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
      text = Well done, it's time for a 90 second break.
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  Routine instructions
    TextComponent top_instr_txt
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      wrapWidth = 1.8
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      text:
        Welcome to Part 2 of the experiment. The instructions are as follows:

        Three of the music pieces you heard earlier will play at the same time: one vibraphone piece, one keyboard piece, and one harmonica piece. These will play from the left, centre, and right respectively.

        First, you will be told to pay attention to one of these pieces in particular. E.g, if you see an "^" arrow, then you should pay attention to the keyboard piece, coming from the centre.

        Then, the pieces will play twice in a row. The first time will just be to remind you of the pieces. During the second time, there will be some "oddballs" where the pitch is shifted for two seconds. Try to count these. Please try not to blink or move during the minute whilst the music plays.

        After the end of the second piece, you will need to type in how many oddballs you heard. You will receive feedback.

        Immediately after, the next trial will start. The pieces played may be the same as previously or different ones.

        There will be a total of 15 trials, with three breaks between them. These are 90s long, but if you feel like your attention is slipping feel free to take longer.

        If you have any questions at all please ask the experimenters.
    MouseComponent mouse_2
      clickable = nextButton_instruct
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_instruct
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
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  Routine Ready1stBlock
    TextComponent top_instr_txt_3
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Are you ready for the first block of trials?
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    MouseComponent mouse_4
      clickable = nextButton_R1B
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_R1B
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
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  Routine Ready
    TextComponent top_instr_txt_2
      letterHeight = 0.1
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Are you ready for the next block of trials?
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    MouseComponent mouse_3
      clickable = nextButton_R
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_R
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine Ready1stBlock
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $randnums[1:4]
    conditionsFile = stimuliOddballsList.xlsx
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator trials
  Routine break_2
  Routine Ready
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = $randnums[5:8]
    conditionsFile = stimuliOddballsList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'}]
    Routine trial
  LoopTerminator trials_2
  Routine break_2
  Routine Ready
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = $randnums[9:12]
    conditionsFile = stimuliOddballsList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'}]
    Routine trial
  LoopTerminator trials_3
  Routine break_2
  Routine Ready
  LoopInitiator trials_4 loopType="TrialHandler"
    Selected rows = $randnums[13:15]
    conditionsFile = stimuliOddballsList.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trial
  LoopTerminator trials_4
