PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = externalMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [2560, 1440]
  color = -0.4510, 0.0196, 0.4118
  expName = First Attempt at Part 3 Expt Script
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent attendNote
      letterHeight = 0.05
      startVal [condition] = $attend==True
      stopVal [duration (s)] = 5.0
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      text:
        Attend to the music
    TextComponent dontAttendNote
      letterHeight = 0.05
      startVal [condition] = attend==False
      stopVal [duration (s)] = 5.0
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      text:
        Do NOT attend to the music
    SoundComponent stimulus
      sound = $stimuli_0
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 30.0
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  Routine break_2
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Well done, it's time for a five minute break.
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  Routine instructions
    TextComponent top_instr_txt
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      wrapWidth = 1.8
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      text:
        First, you will be told to either "attend", or to "NOT attend" to the music that will be played.

        Then, one of the music pieces from before will be played, alongside a silent film. Please try not to blink or move during this period.

        You will not need to do anything else, and there will be a short break before the next trial.

        If you have any questions at all please ask the experimenters.
    MouseComponent mouse_2
      clickable = nextButton_instruct
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_instruct
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
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  Routine interTrialPause
    TextComponent Break25s
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = 25 second break - feel free to stretch/blink/etc.
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  Routine Ready
    TextComponent top_instr_txt_3
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = When you are ready, click "NEXT".
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    MouseComponent mouse_4
      clickable = nextButton_R1B
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_R1B
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine Ready
  LoopInitiator block loopType="TrialHandler"
    Selected rows = 1:15
    conditionsFile = stimuliList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuli_0': 'Stimuli/Placeholder1.wav', 'trigger': 'Stimuli/trigger_Placeholder1.wav'},
      {'stimuli_0': 'Stimuli/Harmonica1.wav', 'trigger': 'Stimuli/trigger_Harmonica1.wav'},
      {'stimuli_0': 'Stimuli/Harmonica2.wav', 'trigger': 'Stimuli/trigger_Harmonica2.wav'},
      {'stimuli_0': 'Stimuli/Harmonica3.wav', 'trigger': 'Stimuli/trigger_Harmonica3.wav'},
      {'stimuli_0': 'Stimuli/Placeholder2.wav', 'trigger': 'Stimuli/trigger_Placeholder2.wav'},
      {'stimuli_0': 'Stimuli/Placeholder3.wav', 'trigger': 'Stimuli/trigger_Placeholder3.wav'},
      {'stimuli_0': 'Stimuli/Placeholder4.wav', 'trigger': 'Stimuli/trigger_Placeholder4.wav'},
      {'stimuli_0': 'Stimuli/Keyboard-Happy-KeyOfAMinor.wav', 'trigger': 'Stimuli/trigger_Keyboard-Happy-KeyOfAMinor.wav'},
      {'stimuli_0': 'Stimuli/Keyboard-Sad-KeyOfAMinor.wav', 'trigger': 'Stimuli/trigger_Keyboard-Sad-KeyOfAMinor.wav'},
      {'stimuli_0': 'Stimuli/Keyboard-AggressivelyMelancholic-KeyofAMinor.wav', 'trigger': 'Stimuli/trigger_Keyboard-AggressivelyMelancholic-KeyOfAMinor.wav'},
      {'stimuli_0': 'Stimuli/Vibraphone-Major-AGFE-80BPM.wav', 'trigger': 'Stimuli/trigger_Vibraphone-Major-AGFE-80BPM.wav'},
      {'stimuli_0': 'Stimuli/Vibraphone-Minor-AGFE-80BPM.wav', 'trigger': 'Stimuli/trigger_Vibraphone-Minor-AGFE-80BPM.wav'},
      {'stimuli_0': 'Stimuli/Keyboard-Major-AGFE-80BPM.wav', 'trigger': 'Stimuli/trigger_Keyboard-Major-AGFE-80BPM.wav'},
      {'stimuli_0': 'Stimuli/Keyboard-Minor-AGFE-80BPM.wav', 'trigger': 'Stimuli/trigger_Keyboard-Minor-AGFE-80BPM.wav'}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
    Routine trial
    Routine interTrialPause
  LoopTerminator block
