PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -0.4510, 0.0196, 0.4118
  expName = First Attempt at Part 1 Expt Script
  keyboardBackend = ioHub
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Routines
  Routine break_2
    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Well done, it's time for a five minute break.
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  Routine trial
    MovieComponent silentFilm
      backend = moviepy
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    SoundComponent stimulus
      sound [set every repeat] = $stimuli
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    TextComponent valence
      letterHeight = 0.04
      pos = (0, 0.45)
      startVal [time (s)] = 30
      text = How positive or negative do you feel right now?
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    SliderComponent valenceResp
      forceEndRoutine = False
      granularity = 0
      labels = ("Very negative","Neutral","Very positive")
      letterHeight = 0.025
      pos = (0, 0.35)
      size = (1.0, 0.04)
      startVal [time (s)] = 30
      styles = rating
      ticks = (1,2,3)
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    TextComponent arousal
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 30
      text = How active or passive do you feel right now?
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    SliderComponent arousalResp
      forceEndRoutine = False
      granularity = 0
      labels = ("Very passive","Neutral","Very active")
      letterHeight = 0.025
      pos = (0, 0.05)
      size = (1.0, 0.04)
      startVal [time (s)] = 30
      styles = rating
      ticks = (1,2,3)
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    TextComponent dominance
      letterHeight = 0.04
      pos = (0, -0.15)
      startVal [time (s)] = 30
      text = How dominant or submissive do you feel right now?
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    SliderComponent dominanceResp
      forceEndRoutine = False
      granularity = 0
      labels = ("Very submissive","Neutral","Very dominant")
      letterHeight = 0.025
      pos = (0, -0.25)
      size = (1.0, 0.04)
      startVal [time (s)] = 30
      styles = rating
      ticks = (1,2,3)
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    MouseComponent mouse
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent nextButton
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [condition] = valenceResp.rating and arousalResp.rating and dominanceResp.rating
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  Routine trial_instruction
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Listen carefully the audio excerpt ... and ...

        Ready for next trial?
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ready
    TextComponent top_instr_txt_2
      letterHeight = 0.1
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Are you ready for the next block of trials?
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    MouseComponent mouse_3
      clickable = nextButton_R
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_R
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
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  Routine Ready1stBlock
    TextComponent top_instr_txt_3
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Are you ready for the first block of trials?
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    MouseComponent mouse_4
      clickable = nextButton_R1B
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_R1B
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
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  Routine interTrialPause
    TextComponent Break25s
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = 25 second break - feel free to stretch/blink/etc.
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  Routine instructions
    TextComponent instr_txt
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      wrapWidth = 1.8
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      text:
        Welcome to Part 1 of the experiment. The instructions are as follows:

        During each trial, a random music clip will be played. A silent film will also be played. Try to listen to the music, but you can enjoy the film as well. Please try not to blink or move during this 30s period.

        After this, you will be asked to rate the emotions you feel. There will then be a 25s break (blink/stretch/etc as much as you like during this), before the next trial begins.

        After eight trials, there will be a five minute break, before the final seven trials run.

        If you have any questions at all please ask the experimenters.
    MouseComponent mouse_2
      clickable = nextButton_instruct
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_instruct
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine Ready1stBlock
  LoopInitiator block1 loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = stimuliList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuli': 'Stimuli/Albums-AnaBelen_Veneo-03.wav'},
      {'stimuli': 'Stimuli/Albums-Ballroom_Classics4-11.wav'},
      {'stimuli': 'Stimuli/Albums-Ballroom_Classics4-12.wav'},
      {'stimuli': 'Stimuli/Albums-Ballroom_Magic-09.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-06.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-07.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-09.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-10.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-15.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-16.wav'},
      {'stimuli': 'Stimuli/Albums-Commitments-10.wav'},
      {'stimuli': 'Stimuli/Albums-Fire-01.wav'},
      {'stimuli': 'Stimuli/Albums-GloriaEstefan_MiTierra-04.wav'},
      {'stimuli': 'Stimuli/Albums-GloriaEstefan_MiTierra-06.wav'},
      {'stimuli': 'Stimuli/Albums-Latino_Latino-05.wav'}]
    Routine trial
    Routine interTrialPause
  LoopTerminator block1
  LoopInitiator trial8 loopType="TrialHandler"
    Selected rows = 7
    conditionsFile = stimuliList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuli': 'Stimuli/Albums-AnaBelen_Veneo-03.wav'},
      {'stimuli': 'Stimuli/Albums-Ballroom_Classics4-11.wav'},
      {'stimuli': 'Stimuli/Albums-Ballroom_Classics4-12.wav'},
      {'stimuli': 'Stimuli/Albums-Ballroom_Magic-09.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-06.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-07.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-09.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-10.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-15.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-16.wav'},
      {'stimuli': 'Stimuli/Albums-Commitments-10.wav'},
      {'stimuli': 'Stimuli/Albums-Fire-01.wav'},
      {'stimuli': 'Stimuli/Albums-GloriaEstefan_MiTierra-04.wav'},
      {'stimuli': 'Stimuli/Albums-GloriaEstefan_MiTierra-06.wav'},
      {'stimuli': 'Stimuli/Keyboard - major - minor - A-G-F-E 80BPM'}]
    Routine trial
  LoopTerminator trial8
  Routine break_2
  Routine Ready
  LoopInitiator block2 loopType="TrialHandler"
    Selected rows = 8:13
    conditionsFile = stimuliList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuli': 'Stimuli/Albums-AnaBelen_Veneo-03.wav'},
      {'stimuli': 'Stimuli/Albums-Ballroom_Classics4-11.wav'},
      {'stimuli': 'Stimuli/Albums-Ballroom_Classics4-12.wav'},
      {'stimuli': 'Stimuli/Albums-Ballroom_Magic-09.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-06.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-07.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-09.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-10.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-15.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-16.wav'},
      {'stimuli': 'Stimuli/Albums-Commitments-10.wav'},
      {'stimuli': 'Stimuli/Albums-Fire-01.wav'},
      {'stimuli': 'Stimuli/Albums-GloriaEstefan_MiTierra-04.wav'},
      {'stimuli': 'Stimuli/Albums-GloriaEstefan_MiTierra-06.wav'},
      {'stimuli': 'Stimuli/Albums-Latino_Latino-05.wav'}]
    Routine trial
    Routine interTrialPause
  LoopTerminator block2
  LoopInitiator trial15 loopType="TrialHandler"
    Selected rows = 14
    conditionsFile = stimuliList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuli': 'Stimuli/Albums-AnaBelen_Veneo-03.wav'},
      {'stimuli': 'Stimuli/Albums-Ballroom_Classics4-11.wav'},
      {'stimuli': 'Stimuli/Albums-Ballroom_Classics4-12.wav'},
      {'stimuli': 'Stimuli/Albums-Ballroom_Magic-09.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-06.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-07.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-09.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-10.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-15.wav'},
      {'stimuli': 'Stimuli/Albums-Cafe_Paradiso-16.wav'},
      {'stimuli': 'Stimuli/Albums-Commitments-10.wav'},
      {'stimuli': 'Stimuli/Albums-Fire-01.wav'},
      {'stimuli': 'Stimuli/Albums-GloriaEstefan_MiTierra-04.wav'},
      {'stimuli': 'Stimuli/Albums-GloriaEstefan_MiTierra-06.wav'},
      {'stimuli': 'Stimuli/Keyboard - major - minor - A-G-F-E 80BPM'}]
    Routine trial
  LoopTerminator trial15
