PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -0.4510, 0.0196, 0.4118
  expName = First Attempt at Questionnaire Expt Script
  keyboardBackend = ioHub
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Routines
  Routine Demographics
    TextComponent DemoHeading
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Demographics
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    TextComponent gender
      letterHeight = 0.03
      pos = (0.0, 0.32)
      startVal [time (s)] = 0.0
      text = Q1: What is your gender?
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    SliderComponent genderResp
      forceEndRoutine = False
      granularity = 1
      labels = ("Male", "Female", "Transgender male", "Transgender female", "Other (please specify)")
      letterHeight = 0.025
      pos = (0.0, 0.27)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextboxComponent genderRespOther
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.025
      pos = (0.55, 0.14)
      size = (0.3, 0.04)
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    TextComponent age
      letterHeight = 0.03
      pos = (0.0, 0.06)
      startVal [time (s)] = 0.0
      text = Q2: What is your age in years?
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    TextboxComponent ageResp
      bold = False
      borderColor = Black
      color = Black
      editable = True
      fillColor = White
      letterHeight = 0.025
      pos = (0.0, 0.01)
      size = (0.3, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent nationality
      letterHeight = 0.03
      pos = (0.0, -0.07)
      startVal [time (s)] = 0.0
      text = Q3: What is your nationality?
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    TextboxComponent nationalityResp
      bold = False
      borderColor = Black
      color = Black
      editable = True
      fillColor = White
      letterHeight = 0.025
      pos = (0.0, -0.12)
      size = (0.3, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent originCountry
      letterHeight = 0.03
      pos = (0.0, -0.2)
      startVal [time (s)] = 0.0
      text = Q4: What is your country of origin?
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    TextboxComponent originCountryResp
      bold = False
      borderColor = Black
      color = Black
      editable = True
      fillColor = White
      letterHeight = 0.025
      pos = (0, -0.25)
      size = (0.3, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent nextButton
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
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    MouseComponent mouse
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Personal_Responses_to_Music__Perception
    TextComponent personalResponsesHeadingP
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
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      text:
        Personal Responses to Music: Perception
    TextComponent Q10
      letterHeight = 0.03
      pos = (-0.2, 0.35)
      startVal [time (s)] = 0.0
      text = Q10: I am able to judge whether someone is a good singer or not.
      wrapWidth = 1.35
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    SliderComponent Q10Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.7, 0.35)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q11
      letterHeight = 0.03
      pos = (-0.2, 0.27)
      startVal [time (s)] = 0.0
      text = Q11: I usually know when I'm hearing a song for the first time.
      wrapWidth = 1.35
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    SliderComponent Q11Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.7, 0.27)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q12
      letterHeight = 0.03
      pos = (-0.2, 0.19)
      startVal [time (s)] = 0.0
      text = Q12: I find it difficult to spot mistakes in a performance of a song even if I know the tune.
      wrapWidth = 1.35
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    SliderComponent Q12Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.7, 0.19)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q13
      letterHeight = 0.03
      pos = (-0.2, 0.11)
      startVal [time (s)] = 0.0
      text = Q13: I can compare and discuss differences between two performances or versions of the same piece of music.
      wrapWidth = 1.35
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    SliderComponent Q13Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.7, 0.11)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q14
      letterHeight = 0.03
      pos = (-0.2, 0.03)
      startVal [time (s)] = 0.0
      text = Q14: I have trouble recognizing a familiar song when played in a different way or by a different performer.
      wrapWidth = 1.35
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    SliderComponent Q14Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.7, 0.03)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q15
      letterHeight = 0.03
      pos = (-0.2, -0.05)
      startVal [time (s)] = 0.0
      text = Q15: I can tell when people sing or play out of time with the beat.
      wrapWidth = 1.35
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    SliderComponent Q15Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.7, -0.05)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q16
      letterHeight = 0.03
      pos = (-0.2, -0.13)
      startVal [time (s)] = 0.0
      text = Q16: I can tell when people sing or play out of tune.
      wrapWidth = 1.35
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    SliderComponent Q16Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.7, -0.13)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q17
      letterHeight = 0.03
      pos = (-0.2, -0.21)
      startVal [time (s)] = 0.0
      text = Q17: When I sing, I have no idea whether I'm in tune or not.
      wrapWidth = 1.35
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    SliderComponent Q17Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.7, -0.21)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q18
      letterHeight = 0.03
      pos = (-0.2, -0.29)
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Q18: When I hear a music piece, I can usually identify its genre.
    SliderComponent Q18Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.7, -0.29)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    ImageComponent nextButton_2
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
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    MouseComponent mouse_2
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Personal_Responses_to_Music__Emotion
    TextComponent personalResponsesHeadingE
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
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      text:
        Personal Responses to Music: Emotion
    TextComponent Q19
      letterHeight = 0.03
      pos = (-0.2, 0.35)
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Q19: I sometimes choose music that can trigger shivers down my spine.
    SliderComponent Q19Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.7, 0.35)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q20
      letterHeight = 0.03
      pos = (-0.2, 0.27)
      startVal [time (s)] = 0.0
      text = Q20: Pieces of music rarely evoke emotions for me.
      wrapWidth = 1.35
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    SliderComponent Q20Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.7, 0.27)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q21
      letterHeight = 0.03
      pos = (-0.2, 0.19)
      startVal [time (s)] = 0.0
      text = Q21: I often pick certain music to motivate or excite me. 
      wrapWidth = 1.35
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    SliderComponent Q21Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.7, 0.19)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q22
      letterHeight = 0.03
      pos = (-0.2, 0.11)
      startVal [time (s)] = 0.0
      text = Q22: I am able to identify what is special about a given musical piece.
      wrapWidth = 1.35
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    SliderComponent Q22Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.7, 0.11)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q23
      letterHeight = 0.03
      pos = (-0.2, 0.03)
      startVal [time (s)] = 0.0
      text = Q23: I am able to talk about the emotions that a piece of music evokes for me.
      wrapWidth = 1.35
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    SliderComponent Q23Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.7, 0.03)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q24
      letterHeight = 0.03
      pos = (-0.2, -0.05)
      startVal [time (s)] = 0.0
      text = Q24: Music can evoke my memories of past people and places.
      wrapWidth = 1.35
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    SliderComponent Q24Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.7, -0.05)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    ImageComponent nextButton_4
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
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    MouseComponent mouse_4
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Current_Mental_Property_pg2
    TextComponent cmpHeading_2
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Current Mental Property: Emotions
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    TextComponent text_2
      letterHeight = 0.03
      pos = (0, 0.34)
      startVal [time (s)] = 0.0
      text = Please remember to ask for clarification if you are unsure of any questions.
      wrapWidth = 1.7
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    TextboxComponent clickForEmotionInfo
      bold = True
      color = 0.5961, -0.7333, -0.7333
      editable = False
      letterHeight = 0.03
      pos = (0, 0.295)
      size = (1.7, 0.35)
      startVal [time (s)] = 0.0
      text = Click here for more information on how the categories relate to particular emotions.
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    TextComponent moodValence_2
      letterHeight = 0.03
      pos = (0.0, 0.23)
      startVal [time (s)] = 0.0
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      text:
        Q7: How positive or negative is your current mood?
    SliderComponent moodValenceResp_2
      forceEndRoutine = False
      granularity = 0
      labels = ("Very negative", "Neutral", "Very positive")
      letterHeight = 0.03
      pos = (0.0, 0.16)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3)
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    TextComponent moodArousal
      letterHeight = 0.03
      pos = (0.0, 0.01)
      startVal [time (s)] = 0.0
      text = Q8: How active (energetic) or passive is your current mood? For example, sleepiness is a passive feeling, whereas excitement is an active feeling.
      wrapWidth = 1.7
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    SliderComponent moodArousalResp
      forceEndRoutine = False
      granularity = 0
      labels = ("Very passive", "Neutral", "Very active")
      letterHeight = 0.03
      pos = (0.0, -0.06)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3)
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    TextComponent moodDominance
      letterHeight = 0.03
      pos = (0.0, -0.21)
      startVal [time (s)] = 0.0
      text = Q9: How dominant would you say your current mood is? For example, although fear and anger are both active and negative, fear makes a person feel submissive, whereas anger makes a person feel dominant.
      wrapWidth = 1.7
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    SliderComponent moodDominanceResp
      forceEndRoutine = False
      granularity = 0
      labels = ("Very submissive", "Neutral", "Very dominant")
      letterHeight = 0.03
      pos = (0.0, -0.28)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3)
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    ImageComponent nextButton2_2
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
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    MouseComponent mouse2_2
      clickable = nextButton, clickForEmotionInfo
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Current_Mental_Property_pg1
    TextComponent cmpHeading
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Current Mental Property
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    TextComponent text
      letterHeight = 0.03
      pos = (0, 0.31)
      startVal [time (s)] = 0.0
      text = Please remember to ask for clarification if you are unsure of any questions.
      wrapWidth = 1.7
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    TextComponent tired
      letterHeight = 0.03
      pos = (0.0, 0.23)
      startVal [time (s)] = 0.0
      text = Q5:  How rested do you feel? A rating of 1 indicates not at all, and a rating of 5 indicates very well-rested.
      wrapWidth = 1.7
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    SliderComponent tiredResp
      forceEndRoutine = False
      granularity = 1
      labels = ("1", "2","3","4","5")
      letterHeight = 0.025
      pos = (0.0, 0.16)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent wired
      letterHeight = 0.03
      pos = (0.0, 0.01)
      startVal [time (s)] = 0.0
      text = Q6:  How "wired" do you feel? A rating of 1 indicates not at all, and a rating of 5 indicates very "wired".
      wrapWidth = 1.7
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    SliderComponent wiredResp
      forceEndRoutine = False
      granularity = 1
      labels = ("1", "2","3","4","5")
      letterHeight = 0.025
      pos = (0.0, -0.06)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent nextButton2
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
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    MouseComponent mouse2
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Categorical_Emotions_to_VAD_Mapping
    ImageComponent Emotions_Mapping_Figure
      image = C:/Users/Chris/Pictures/V-A-D to Ekman model mapping.png
      pos = (0, 0.06)
      size = (1.07117, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_3
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
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    MouseComponent mouse_3
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.02
      pos = (0, -0.47)
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        Image taken from Buechel and Hahn, 2016. Used under the terms of the Creative Commons Attribution Non-Commercial License 4.0.
Flow
  Routine Demographics
  Routine Current_Mental_Property_pg1
  Routine Current_Mental_Property_pg2
  Routine Categorical_Emotions_to_VAD_Mapping
  Routine Personal_Responses_to_Music__Perception
  Routine Personal_Responses_to_Music__Emotion
